<?xml version="1.0"?>
<VarianResearchBeam SchemaVersion="1.0">
    <!--Build from python-->
    <SetBeam>
        <Id>1234</Id>
        <MLCModel>NDS120HD</MLCModel>
        <Accs />
        <ControlPoints>
            <Cp>
                <SubBeam>
                    <Seq>0</Seq>
                    <Name>MV Outside</Name>
                </SubBeam>
                <Energy>6x</Energy>
                <Mu>0</Mu>
                <DRate>400</DRate>
                <GantryRtn>0.0</GantryRtn>
                <CollRtn>180</CollRtn>
                <CouchRtn>180</CouchRtn>
                <Y1>-0.0</Y1>
                <Y2>2.7</Y2>
                <X1>3.2</X1>
                <X2>3.2</X2>
                <Mlc>
                    <ID>1</ID>
                    <B>1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.580
                        1.970 2.207 2.332 2.375 2.326 2.232 2.065 1.720 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390</B>
                    <A>-1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.130 -0.830 -0.562 -0.437 -0.405 -0.445 -
                        0.542 -0.710 -0.960 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390</A>
                </Mlc>
            </Cp>
            <Cp />
            <Cp>
                <GantryRtn>90.0</GantryRtn>
                <Mlc>
                    <ID>1</ID>
                    <B>1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 0.185
                        0.543 0.799 0.907 0.967 0.928 0.838 0.678 0.475 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390</B>
                    <A>-1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 0.238 0.583 0.854 0.960 0.988 0.985 0.899 0.750
                        0.525 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390</A>
                </Mlc>
            </Cp>
            <Cp />
            <Cp>
                <GantryRtn>180.0</GantryRtn>
                <Mlc>
                    <ID>1</ID>
                    <B>1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 -1.130 -
                        0.826 -0.562 -0.438 -0.405 -0.447 -0.539 -0.715 -1.000 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390</B>
                    <A>-1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 1.587 1.966 2.208 2.332 2.376 2.330 2.233 2.060
                        1.835 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390</A>
                </Mlc>
            </Cp>
            <Cp />
            <Cp>
                <GantryRtn>270.0</GantryRtn>
                <Mlc>
                    <ID>1</ID>
                    <B>1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 0.275
                        0.596 0.847 0.935 0.962 0.949 0.861 0.660 0.075 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390</B>
                    <A>-1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 0.217 0.549 0.789 0.898 0.939 0.881 0.798 0.602
                        0.211 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390</A>
                </Mlc>
            </Cp>
            <Cp />
            <Cp>
                <GantryRtn>359.0</GantryRtn>
                <Mlc>
                    <ID>1</ID>
                    <B>1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.580
                        1.970 2.207 2.332 2.379 2.329 2.235 2.065 1.700 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390 1.390
                        1.390 1.390 1.390 1.390</B>
                    <A>-1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.130 -0.830 -0.562 -0.435 -0.405 -0.445 -
                        0.535 -0.715 -0.980 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -1.390 -
                        1.390 -1.390 -1.390</A>
                </Mlc>
            </Cp>
            <Cp />
        </ControlPoints>
        <ImagingParameters>
            <OutsideTreatment>
                <MaxMu>100</MaxMu>
            </OutsideTreatment>
            <ImagingPoints>
                <ImagingPoint>
                    <Cp>1</Cp>
                    <Acquisition>
                        <AcquisitionId>0</AcquisitionId>
                        <AcquisitionSpecs />
                        <AcquisitionParameters>
                            <ImageMode id="Highres" />
                            <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
                            <MV />
                        </AcquisitionParameters>
                    </Acquisition>
                    <Mvd>
                        <Positions>
                            <Lat>0</Lat>
                            <Lng>0</Lng>
                            <Vrt>-80</Vrt>
                            <Pitch>0</Pitch>
                        </Positions>
                    </Mvd>
                </ImagingPoint>
                <ImagingPoint>
                    <Cp>3</Cp>
                    <Acquisition>
                        <AcquisitionId>1</AcquisitionId>
                        <AcquisitionSpecs />
                        <AcquisitionParameters>
                            <ImageMode id="Highres" />
                            <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
                            <MV />
                        </AcquisitionParameters>
                    </Acquisition>
                    <Mvd>
                        <Positions>
                            <Lat>0</Lat>
                            <Lng>0</Lng>
                            <Vrt>-80</Vrt>
                            <Pitch>0</Pitch>
                        </Positions>
                    </Mvd>
                </ImagingPoint>
                <ImagingPoint>
                    <Cp>5</Cp>
                    <Acquisition>
                        <AcquisitionId>2</AcquisitionId>
                        <AcquisitionSpecs />
                        <AcquisitionParameters>
                            <ImageMode id="Highres" />
                            <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
                            <MV />
                        </AcquisitionParameters>
                    </Acquisition>
                    <Mvd>
                        <Positions>
                            <Lat>0</Lat>
                            <Lng>0</Lng>
                            <Vrt>-80</Vrt>
                            <Pitch>0</Pitch>
                        </Positions>
                    </Mvd>
                </ImagingPoint>
                <ImagingPoint>
                    <Cp>7</Cp>
                    <Acquisition>
                        <AcquisitionId>3</AcquisitionId>
                        <AcquisitionSpecs />
                        <AcquisitionParameters>
                            <ImageMode id="Highres" />
                            <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
                            <MV />
                        </AcquisitionParameters>
                    </Acquisition>
                    <Mvd>
                        <Positions>
                            <Lat>0</Lat>
                            <Lng>0</Lng>
                            <Vrt>-80</Vrt>
                            <Pitch>0</Pitch>
                        </Positions>
                    </Mvd>
                </ImagingPoint>
                <ImagingPoint>
                    <Cp>9</Cp>
                    <Acquisition>
                        <AcquisitionId>4</AcquisitionId>
                        <AcquisitionSpecs />
                        <AcquisitionParameters>
                            <ImageMode id="Highres" />
                            <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
                            <MV />
                        </AcquisitionParameters>
                    </Acquisition>
                    <Mvd>
                        <Positions>
                            <Lat>0</Lat>
                            <Lng>0</Lng>
                            <Vrt>-80</Vrt>
                            <Pitch>0</Pitch>
                        </Positions>
                    </Mvd>
                </ImagingPoint>
            </ImagingPoints>
            <ImagingTolerances />
        </ImagingParameters>
    </SetBeam>
</VarianResearchBeam>