<VarianResearchBeam SchemaVersion="1.0">
    <SetBeam>
        <Id>1</Id>
        <MLCModel>NDS120</MLCModel>
        <TolTable/>
        <VelTable/>
        <Accs/>
        <ControlPoints>
            <Cp>
                <SubBeam>
                    <Seq>0</Seq>
                    <Name>Beam ON!</Name>
                </SubBeam>
                <Energy>6x</Energy>
                <Mu>0.0</Mu>
                <DRate>600.0</DRate>
                <GantryRtn>0.0</GantryRtn>
                <CollRtn>0.0</CollRtn>
                <CouchVrt>0.0</CouchVrt>
                <CouchLat>0.0</CouchLat>
                <CouchLng>0.0</CouchLng>
                <CouchRtn>0.0</CouchRtn>
                <Y1>5.0</Y1>
                <Y2>5.0</Y2>
                <X1>5.0</X1>
                <X2>5.0</X2>
            </Cp>
            <Cp>
                <Mu>1.0</Mu>
                <GantryRtn>90.0</GantryRtn>
                <CollRtn>0.0</CollRtn>
                <CouchVrt>0.0</CouchVrt>
                <CouchLat>0.0</CouchLat>
                <CouchLng>0.0</CouchLng>
                <CouchRtn>0.0</CouchRtn>
                <Y1>5.0</Y1>
                <Y2>5.0</Y2>
                <X1>5.0</X1>
                <X2>5.0</X2>
            </Cp>
        </ControlPoints>
    </SetBeam>
</VarianResearchBeam>
